synapse stdp_stp:

  state:
    w real = 1. @nest::weight  # TODO: find a way to init w with -np.log(np.random.rand())
    u real = U  # facilitation
    x real = 1.  # depression
    a_pre real = 0.
    a_post real = 0.
  end

  parameters:
    #STP
    #U real = random_normal(0.5, 0.25)
    #tau_d ms = random_normal(110 ms, 55 ms)     # depression timescale
    #tau_f ms = random_normal(5 ms, 2.5 ms)    # facilitation timescale

    U real = 0.5
    tau_d ms = 110 ms     # depression timescale
    tau_f ms = 5 ms    # facilitation timescale

    #STDP
    d ms = 3. ms  @nest::delay  # !!! cannot have a variable called "delay"
    tau_tr_pre ms = 15 ms       # presynaptic time constant
    tau_tr_post ms = 30 ms      # postsynaptic time constant
    A_plus real = 0.48          # presynaptic amplitude
    A_minus real = -0.24        # postsynaptic amplitude

  end

  equations:
    u' = (U - u) / tau_f    # STP
    x' = (1 - x) / tau_d    # STP

    a_pre' = -a_pre/tau_tr_pre      # STDP
    a_post' = -a_post/tau_tr_post   # STDP
  end

  input:
    pre_spikes nS <- spike
    post_spikes nS <- spike
  end

  output: spike

  # potentiation
  onReceive(post_spikes):
    w_ real = w + a_pre
  end

  onReceive(pre_spikes):
    w_eff real = u * x * w                # compute effective weight changing the conductance

    x -= x * u                            # STD
    u += U * (1 - u)                      # STF

    deliver_spike(w_eff, d)
  end
end
